PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine images
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    ImageComponent image
      image [set every repeat] = $path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Send marker at image start
        outlet.push_sample(['ImageStart_' + path])
      End Routine:
        # Send marker at image end
        outlet.push_sample(['ImageEnd_' + path])
    CodeComponent LogTime
      Code Type = Py
      Begin Routine:
        start_time = globalClock.getTime()
        print(f"Image {path} started at {start_time:.3f} seconds")
      End Routine:
        end_time = globalClock.getTime()
        print(f"Image {path} ended at {end_time:.3f} seconds")
        duration = end_time - start_time
        print(f"Duration shown: {duration:.3f} seconds")
  Routine attentional
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    ImageComponent cross
      image [set every repeat] = kii6Jy-file-round-cross-svg-wikipedia.png
      pos [set every repeat] = (xPos, yPos)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
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    MouseComponent mouse
      clickable = ['cross']
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine welcome
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    CodeComponent lsl_setup
      Code Type = Py
      Before Experiment:
        globalClock = core.Clock()
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo(name='Markers', type='Markers', channel_count=1, nominal_srate=0, channel_format='string', source_id='psychoLSL001')
        outlet = StreamOutlet(info)
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'path': 'food.jpg', 'xPos': 0, 'yPos': 0.5},
      {'path': 'furniture.jpg', 'xPos': 0.1, 'yPos': 0.4},
      {'path': 'nature.jpg', 'xPos': -0.1, 'yPos': 0.3},
      {'path': 'person.jpg', 'xPos': 0.2, 'yPos': 0.2},
      {'path': 'sport.jpg', 'xPos': -0.2, 'yPos': 0.1},
      {'path': 'tool.jpg', 'xPos': 0.3, 'yPos': 0},
      {'path': 'vehicle.jpg', 'xPos': -0.3, 'yPos': -0.1},
      {'path': 'animal.jpg', 'xPos': 0.4, 'yPos': -0.2},
      {'path': 'building.jpg', 'xPos': -0.4, 'yPos': -0.3},
      {'path': 'electronic.jpg', 'xPos': 0.5, 'yPos': -0.4}]
    Routine attentional
    Routine images
  LoopTerminator trials
