PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1512, 982]
  expName = test1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent visual_response
      image [set every repeat] = $images
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # 'images' is the CSV column variable (e.g. "img1", "img2", …)
        img_name = images
        marker_on = hash(img_name) % 100  # 0–99
        send_marker(marker_on)
        logging.exp(f"Image ON: {img_name} → {marker_on}")
      End Routine:
        # image OFF marker = ON + 100 (mod 255)
        marker_off = (hash(images) % 100 + 100) % 255
        send_marker(marker_off)
        logging.exp(f"Image OFF: {images} → {marker_off}")
  Routine Mouseclicks
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    PolygonComponent polygon
      fillColor = red
      opacity = 0.5
      pos [set every repeat] = (target_x, target_y)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent Hi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thanks for participating!! You have helped us a lot
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        send_marker(200)  # Experiment end
  Routine Intro
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    TextComponent Namuste
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text = Hello!! Welcome to the experiment. Make yourself comfortable and we will start with the exercise. Remember, you will be shown ten pictures. Click on the circle after the image only then will you move forward. Dont strain your brain. Just be calm!! ENJOY!!!
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from psychopy import core, logging
        import platform

        # --- initialize parallel port only off macOS ---
        if platform.system() != 'Darwin':
            try:
                from psychopy import parallel
                port = parallel.ParallelPort(address=0x0378)
                hardware = True
                logging.exp("Parallel port initialized OK")
            except Exception as e:
                port = None
                hardware = False
                logging.warning(f"Parallel port init failed → dummy mode: {e}")
        else:
            port = None
            hardware = False
            logging.warning("macOS detected → parallel port disabled, using dummy markers")

        def send_marker(code):
            """send if hardware available, otherwise log only."""
            if hardware:
                port.setData(code)
                core.wait(0.01)
                port.setData(0)
            logging.exp(f"[DUMMY] Marker {code} sent")
      Begin Routine:
        send_marker(100)  # Experiment start
Flow
  Routine Intro
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = Testbookfinal.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target_x', -0.42), ('target_y', 0.381666667), ('images', 'images/img1.png')]),
      OrderedDict([('target_x', 0.423333333), ('target_y', 0.375), ('images', 'images/img2.png')]),
      OrderedDict([('target_x', -0.07), ('target_y', -0.018333333), ('images', 'images/img3.png')]),
      OrderedDict([('target_x', -0.193333333), ('target_y', -0.353333333), ('images', 'images/img4.png')]),
      OrderedDict([('target_x', 0.266666667), ('target_y', -0.191666667), ('images', 'images/img5.png')]),
      OrderedDict([('target_x', -0.42), ('target_y', 0.381666667), ('images', 'images/img6.png')]),
      OrderedDict([('target_x', 0.423333333), ('target_y', 0.375), ('images', 'images/img7.png')]),
      OrderedDict([('target_x', -0.07), ('target_y', -0.018333333), ('images', 'images/img8.png')]),
      OrderedDict([('target_x', -0.193333333), ('target_y', -0.353333333), ('images', 'images/img9.png')]),
      OrderedDict([('target_x', 0.266666667), ('target_y', -0.191666667), ('images', 'images/img10.png')])]
    Routine trial
    Routine Mouseclicks
  LoopTerminator Loop
  Routine Thanks
