PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stimulus
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine showImg
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    ImageComponent stim_img
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent lsl_markers
      Code Type = Py
      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('MarkerStream', 'Markers', 1, 0, 'string', 'stimulus1234')
        outlet = StreamOutlet(info)

        print("LSL initialised")
      Begin Routine:
        outlet.push_sample([f'Image_ON_{image}'])
      End Routine:
        outlet.push_sample([f'Image_OFF_{image}'])
  Routine startCross
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    TextComponent start_cross
      letterHeight = 0.05
      pos [set every repeat] = (x_pos1, y_pos2)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      text = X
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    MouseComponent start_mouse
      clickable = start_cross
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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  Routine endCross
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    TextComponent end_cross
      letterHeight = 0.05
      pos [set every repeat] = (x_pos2, y_pos2)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
      text = X
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    MouseComponent stop_mouse
      clickable = end_cross
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'images/animal.png', 'x_pos1': 0.2, 'y_pos1': -0.27, 'x_pos2': 0.35, 'y_pos2': -0.02},
      {'image': 'images/building.png', 'x_pos1': 0.33, 'y_pos1': -0.21, 'x_pos2': -0.14, 'y_pos2': -0.12},
      {'image': 'images/food.png', 'x_pos1': 0.41, 'y_pos1': 0.3, 'x_pos2': 0.48, 'y_pos2': -0.23},
      {'image': 'images/furniture.png', 'x_pos1': -0.4, 'y_pos1': 0, 'x_pos2': -0.39, 'y_pos2': 0.22},
      {'image': 'images/game.png', 'x_pos1': 0.02, 'y_pos1': 0.16, 'x_pos2': 0.31, 'y_pos2': 0.29},
      {'image': 'images/laptop.png', 'x_pos1': 0.3, 'y_pos1': 0.28, 'x_pos2': 0.42, 'y_pos2': -0.27},
      {'image': 'images/person.png', 'x_pos1': 0.14, 'y_pos1': -0.1, 'x_pos2': -0.29, 'y_pos2': 0.01},
      {'image': 'images/scenery.png', 'x_pos1': -0.28, 'y_pos1': 0.15, 'x_pos2': -0.12, 'y_pos2': -0.17},
      {'image': 'images/tool.png', 'x_pos1': -0.5, 'y_pos1': -0.29, 'x_pos2': -0.41, 'y_pos2': -0.21},
      {'image': 'images/vehicle.png', 'x_pos1': -0.36, 'y_pos1': -0.06, 'x_pos2': 0.23, 'y_pos2': -0.27}]
    Routine startCross
    Routine showImg
    Routine endCross
  LoopTerminator trials
