PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[0,0,0]
  colorSpace = dkl
  expName = Firstexperiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine SHOWIMAGE
    RoutineSettingsComponent SHOWIMAGE
      useWindowParams = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('Markers', 'Markers', 1, 0, 'string', 'uniqueID')
        marker = StreamOutlet(info)
      Begin Routine:
        marker.push_sample(['IMAGE_ON'])
        print('Image_on')
      End Routine:
        marker.push_sample(['IMAGE_OFF'])
        print('Image_off')
    ImageComponent Firstexperiment
      image [set every repeat] = $imageFile
      size = (1, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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  Routine Attentional_check
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    ImageComponent cross
      image [set every repeat] = cross.jpeg
      ori [set every repeat] = 0
      pos [set every repeat] = [xPos, yPos]
      size = (.1, .1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = ['cross']
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'images/img5.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img8.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img11.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img14.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img17.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img20.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img23.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img26.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img29.jpg'), ('xPos', 0), ('yPos', 0)]),
      OrderedDict([('imageFile', 'images/img32.jpg'), ('xPos', 0), ('yPos', 0)])]
    Routine SHOWIMAGE
    Routine Attentional_check
  LoopTerminator trials
