PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = psychopy experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        welcome to the experiment !
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      text = Press space to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('Markers', 'Markers', 1, 0, 'string', 'uniqueIO')
        marker = StreamOutlet(info)
      Begin Routine:
        marker.push_sample(['IMAGE_ON'])
        print('Image_on')
      End Routine:
        marker.push_sample(['IMAGE_OFF'])
        print('Image_off')
    ImageComponent image_
      image [set every repeat] = $image
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine x_3
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    ImageComponent img_x
      image [set every repeat] = images/Letter X free icons designed by Freepik.jpeg
      pos [set every repeat] = [x_pos,y_pos]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = 'img_x'
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1_cleaned.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0001.jpg'), ('x_pos', 0.5), ('y_pos', -0.5)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0002.jpg'), ('x_pos', 0.2), ('y_pos', 0.08)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0003.jpg'), ('x_pos', -0.3), ('y_pos', -0.2)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0004.jpg'), ('x_pos', 0.4), ('y_pos', 0.03)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0005.jpg'), ('x_pos', 0.11), ('y_pos', -0.07)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0006.jpg'), ('x_pos', -0.15), ('y_pos', 0.04)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0007.jpg'), ('x_pos', 0.19), ('y_pos', 0.12)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0008.jpg'), ('x_pos', 0.25), ('y_pos', -0.25)]),
      OrderedDict([('image', 'images/animal_person_vehicle_nature_building_food_tool_furniture_electronic_sport_page-0009.jpg'), ('x_pos', 0.22), ('y_pos', 0.15)])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
    Routine image_3
    Routine x_3
  LoopTerminator trials
